---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1680
set uniform_coordinates no
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1050
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "\\\\vu.local\\home\\ygo310\\Desktop\\zhuomian\\spatial memory 0 or 2"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background black

define inline_script askforregularity
	set description "Executes Python code"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return  var.dis_reply != u'no' and  var.dis_loc_1 != u'no' and  var.dis_loc_2 != u'no' 
	
	
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_dis_reg = Label(u'1. Have you noticed any regularity about the location of distractors (different color stimuli)? ')
	checkbox_yes = Checkbox(text=u'Yes', group=u'dis_reply', var=u'dis_reply')
	checkbox_no = Checkbox(text=u'No', group=u'dis_reply', var=u'dis_reply')
	label_dis_loc_1 = Label(u'2. which place does the distractor appear more in Part-1? (you can guess one) ')
	checkbox_0 = Checkbox(text=u'0',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_1 = Checkbox(text=u'1',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_2 = Checkbox(text=u'2',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_3 = Checkbox(text=u'3',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_4 = Checkbox(text=u'4',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_5 = Checkbox(text=u'5',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_6 = Checkbox(text=u'6',group = u'dis_loc_1', var = u'dis_loc_1')
	checkbox_7 = Checkbox(text=u'7',group = u'dis_loc_1', var = u'dis_loc_1')
	label_dis_loc_2 = Label(u'3. which place does the distractor appear more in Part-2? (you can guess one) ')
	checkbox_8 = Checkbox(text=u'0',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_9 = Checkbox(text=u'1',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_10 = Checkbox(text=u'2',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_11 = Checkbox(text=u'3',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_12 = Checkbox(text=u'4',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_13 = Checkbox(text=u'5',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_14 = Checkbox(text=u'6',group = u'dis_loc_2', var = u'dis_loc_2')
	checkbox_15 = Checkbox(text=u'7',group = u'dis_loc_2', var = u'dis_loc_2')
	image = ImageWidget(path = pool[u'location_judgment.tif'],adjust = True,frame = False)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1,1,1,1,1,1], cols=[1,1,1,1,1,1,1,1])
	my_form.set_widget(label_dis_reg, (1, 0),colspan=8)
	my_form.set_widget(checkbox_yes, (3, 1))
	my_form.set_widget(checkbox_no, (5,1))
	my_form.set_widget(label_dis_loc_1, (0,5),colspan=8)
	my_form.set_widget(image, (2,2), colspan=4,rowspan = 3)
	my_form.set_widget(checkbox_0, (0,6))
	my_form.set_widget(checkbox_1, (1,6))
	my_form.set_widget(checkbox_2, (2,6))
	my_form.set_widget(checkbox_3, (3,6))
	my_form.set_widget(checkbox_4, (4,6))
	my_form.set_widget(checkbox_5, (5,6))
	my_form.set_widget(checkbox_6, (6,6))
	my_form.set_widget(checkbox_7, (7,6))
	my_form.set_widget(label_dis_loc_2, (0, 7),colspan=8)
	my_form.set_widget(checkbox_8, (0,8))
	my_form.set_widget(checkbox_9, (1,8))
	my_form.set_widget(checkbox_10, (2,8))
	my_form.set_widget(checkbox_11, (3,8))
	my_form.set_widget(checkbox_12, (4,8))
	my_form.set_widget(checkbox_13, (5,8))
	my_form.set_widget(checkbox_14, (6,8))
	my_form.set_widget(checkbox_15, (7,8))
	my_form.set_widget(button_ok,  (3,9),colspan=2)
	my_form._exec()
	
	exp._log.write(u'dis_reply=%s'%var.dis_reply)
	exp._log.write(u'dis_loc_1=%s'%var.dis_loc_1)
	exp._log.write(u'dis_loc_2=%s'%var.dis_loc_2)
	__end__
	set _prepare ""

define inline_script blank
	set description "Executes Python code"
	___run__
	blank.show()
	var.sleep(dur_time)
	__end__
	___prepare__
	blank = canvas()
	dur_time = random.randint(500,750)
	__end__

define loop block_loop
	set source table
	set skip 0
	set repeat 5
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first no
	set break_if "[count_trial_sequence]>20 and [practice]=yes"
	setcycle 0 detection vertical
	setcycle 0 tar_color red
	setcycle 0 tar_shape circle
	setcycle 0 td_dif dif
	setcycle 1 detection horizontal
	setcycle 1 tar_color red
	setcycle 1 tar_shape circle
	setcycle 1 td_dif dif
	setcycle 2 detection vertical
	setcycle 2 tar_color green
	setcycle 2 tar_shape circle
	setcycle 2 td_dif dif
	setcycle 3 detection horizontal
	setcycle 3 tar_color green
	setcycle 3 tar_shape circle
	setcycle 3 td_dif dif
	setcycle 4 detection vertical
	setcycle 4 tar_color red
	setcycle 4 tar_shape diamond
	setcycle 4 td_dif dif
	setcycle 5 detection horizontal
	setcycle 5 tar_color red
	setcycle 5 tar_shape diamond
	setcycle 5 td_dif dif
	setcycle 6 detection vertical
	setcycle 6 tar_color green
	setcycle 6 tar_shape diamond
	setcycle 6 td_dif dif
	setcycle 7 detection horizontal
	setcycle 7 tar_color green
	setcycle 7 tar_shape diamond
	setcycle 7 td_dif dif
	setcycle 8 detection vertical
	setcycle 8 tar_color red
	setcycle 8 tar_shape circle
	setcycle 8 td_dif same
	setcycle 9 detection horizontal
	setcycle 9 tar_color red
	setcycle 9 tar_shape circle
	setcycle 9 td_dif same
	setcycle 10 detection vertical
	setcycle 10 tar_color green
	setcycle 10 tar_shape circle
	setcycle 10 td_dif same
	setcycle 11 detection horizontal
	setcycle 11 tar_color green
	setcycle 11 tar_shape circle
	setcycle 11 td_dif same
	setcycle 12 detection vertical
	setcycle 12 tar_color red
	setcycle 12 tar_shape diamond
	setcycle 12 td_dif same
	setcycle 13 detection horizontal
	setcycle 13 tar_color red
	setcycle 13 tar_shape diamond
	setcycle 13 td_dif same
	setcycle 14 detection vertical
	setcycle 14 tar_color green
	setcycle 14 tar_shape diamond
	setcycle 14 td_dif same
	setcycle 15 detection horizontal
	setcycle 15 tar_color green
	setcycle 15 tar_shape diamond
	setcycle 15 td_dif same
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run define_trial_list always
	run block_loop always
	run new_feedback "[practice]=no and [count_block_sequence]!=4"
	run feedback always

define inline_script correct_1
	set description "Executes Python code"
	___run__
	var.correct_1 = 1 if var.response_keyboard_response_1 in var.correct_response_1 else 0
	
	
	total_response_1 +=1
	total_correct_1 = total_correct_1 + var.correct_1
	acc_1 = 100*total_correct_1/total_response_1
	exp.set("acc_1",acc_1)
	__end__
	set _prepare ""

define inline_script correct_2
	set description "Executes Python code"
	___run__
	var.correct_2 = 1 if var.response_keyboard_response_2 in [var.correct_response_2] else 0
	
	
	total_response_2 +=1
	total_correct_2 = total_correct_2 + var.correct_2
	acc_2 = 100*total_correct_2/total_response_2
	exp.set("acc_2",acc_2)
	__end__
	set _prepare ""

define inline_script define_trial_list
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	global real_con_list,block_list,Fixed_dis,memory_list,area_loc # Make pic_list global so we can use it later
	### get subject number
	Subj_num = self.get("subject_nr")
	block_nr = self.get("count_block_sequence")
	### Define the fixed distractor location and other locations.
	Fixed_dis = Subj_num%8-4
	
	print Fixed_dis
	tar_positions = range(0,8) 
	nodis_positions = [""]
	Fixed_loc = tar_positions[Fixed_dis]
	print Fixed_dis,Fixed_loc
	##############################################
	chance = [0,1,1,2]*20
	random.shuffle(chance)
	area1 = [(-3,3),(-1,3),(-3,1),(-1,1),(-1,2),(-2,1),(-2,2),(-2,3),(-3,2)]
	area2 = [(3,3),(1,3),(3,1),(1,1),(1,2),(2,1),(2,2),(2,3),(3,2)]
	area3 = [(-3,-3),(-1,-3),(-3,-1),(-1,-1),(-1,-2),(-2,-1),(-2,-2),(-2,-3),(-3,-2)]
	area4 = [(3,-3),(1,-3),(3,-1),(1,-1),(1,-2),(2,-1),(2,-2),(2,-3),(3,-2)]
	area_loc= [area1,area2,area3,area4]
	
	area_list = []
	for a in area_loc:
		for b in area_loc:
			if a == b :
				continue
			area_list.append([a,b]) 
	area_list = random.sample(area_list*7, 80)
	print area_list
	print len(area_list)
	################################################
	nodis_list = []
	high_list = []
	real_con_list = []
	#no distractor
	for a in tar_positions:
		for b in nodis_positions:
			nodis_list.append([a,b])
	#distarctor in high probobility location
	for a in tar_positions:
		for b in [Fixed_loc]:
			if b == a:
				continue
			high_list.append([a,b])
	
	print len(nodis_list),len(high_list)
	
	if var.practice =="no":
		real_con_list = nodis_list*3 + high_list*5 + low_list[21*(block_nr-1):21*block_nr]
	elif var.practice =="yes":
		real_con_list = nodis_list*5
	print len(real_con_list)
	random.shuffle(real_con_list)
	
	total_response_1 = 0
	total_correct_1  = 0
	total_response_2 = 0
	total_correct_2  = 0
	__end__

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Thanks for participation !<br /><br />The whole experiment is over<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	set allowed_responses space
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="The practice is over<br /><br />Press space to the formal experiment" x=0 y=0 z_index=0

define sampler error_sound
	set volume 1
	set stop_after 0
	set sample "error.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler error_sound_1
	set volume 1
	set stop_after 0
	set sample "error.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run information always
	run instruction_low "[subject_parity]=\"even\""
	run instruction_high "[subject_parity]=\"odd\""
	run low_list always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run askforregularity always
	run end_of_experiment always

define inline_script experiment_inline_script
	set description "Executes Python code"
	___run__
	fixCanvas.show()
	var.sleep(500)
	memoryCanvas.show()
	var.sleep(500)
	fixCanvas.show()
	var.sleep(500)
	memoryCanvas2.show()
	var.sleep(500)
	blank.show()
	var.sleep(500)
	##############################
	fixCanvas.show()
	var.sleep(500)
	myCanvas.show()
	__end__
	___prepare__
	from math import pi,cos,sin,atan
	import random
	global real_con_list,block_list,Fixed_dis,memory_list,area_loc
	
	memoryCanvas   = canvas()
	memoryCanvas2  = canvas()
	memoryCanvas3  = canvas()
	fixCanvas      = canvas(penwidth = 6)
	myCanvas       = canvas()
	responseCanvas = canvas()
	
	var.area       = area_list.pop(0)
	var.location   = real_con_list.pop(0)
	var.tar_position,var.dis_position = var.location
	a = var.tar_position
	b = var.dis_position
	c = chance.pop()
	
	area      = var.area
	tar_shape = var.tar_shape
	tar_color = var.tar_color
	detection = var.detection
	td_dif    = var.td_dif
	condition = var.condition
	
	positions = [0,1,2,3,4,5,6,7]
	if b == positions[Fixed_dis]:
		var.distance_dis = 0
	elif b == positions[Fixed_dis+1] or b == positions[Fixed_dis-1]:
		var.distance_dis = 1
	elif b == positions[Fixed_dis-2] or b == positions[Fixed_dis+2]:
		var.distance_dis = 2
	elif b == positions[Fixed_dis-3] or b == positions[Fixed_dis+3] :
		var.distance_dis = 3
	elif b == positions[Fixed_dis-4] :
		var.distance_dis = 4	
	elif b == "":
		var.distance_dis = 6
	
	if a == positions[Fixed_dis]:
		var.distance_tar = 0
	elif a == positions[Fixed_dis-1] or a == positions[Fixed_dis+1]:
		var.distance_tar = 1
	elif a == positions[Fixed_dis-2] or a == positions[Fixed_dis+2]:
		var.distance_tar = 2
	elif a == positions[Fixed_dis-3] or a == positions[Fixed_dis+3]:
		var.distance_tar = 3
	elif a == positions[Fixed_dis-4]:
		var.distance_tar = 4
		
	
	cx = myCanvas.width/2
	cy = myCanvas.height/2
	deg2pix  = cx/(atan(47.38/144)*180/pi)  # change if need, distance and screen size
	print deg2pix
	fixCanvas.line(cx-0.4*deg2pix,cy,cx+0.4*deg2pix,cy)
	fixCanvas.line(cx,cy+0.4*deg2pix,cx,cy-0.4*deg2pix)
	################################################################
	####working memory task
	memoryCanvas.copy(fixCanvas)
	memoryCanvas2.copy(fixCanvas)
	responseCanvas.copy(fixCanvas)
	
	
	
	dot_loc = area1+area2+area3+area4
	right_area_loc = area[0]+area[1]
	
	
	if condition == "low_load":
		##########ignore dots##########################
		loc1 = random.choice(area[0])
		loc2 = random.choice(area[1])
		memoryCanvas.rect((loc1[0]-0.15)*deg2pix+cx,(loc1[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		memoryCanvas2.rect((loc2[0]-0.15)*deg2pix+cx,(loc2[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		
	
		if c == 0:
			other_loc = [l for l in dot_loc if l not in right_area_loc]
			wrong_loc = random.choice(other_loc)
			real_locs = [wrong_loc,loc2]
			for i in range(0,2):
				responseCanvas.rect((real_locs[i][0]-0.15)*deg2pix+cx,(real_locs[i][1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			var.correct_response_2 = "space"
		if c == 2:
			other_loc = [l for l in area[0] if l not in [loc1]]
			wrong_loc = random.choice(other_loc)
			real_locs = [wrong_loc,loc2]
			for i in range(0,2):
				responseCanvas.rect((real_locs[i][0]-0.15)*deg2pix+cx,(real_locs[i][1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			var.correct_response_2 = "space"	
		if c == 1:
			var.correct_response_2 = "space"
			responseCanvas.rect((loc1[0]-0.15)*deg2pix+cx,(loc1[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			responseCanvas.rect((loc2[0]-0.15)*deg2pix+cx,(loc2[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		
			
		
	elif condition == "high_load":
		loc1 = random.choice(area[0])
		loc2 = random.choice(area[1])
		memoryCanvas.rect((loc1[0]-0.15)*deg2pix+cx,(loc1[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		memoryCanvas2.rect((loc2[0]-0.15)*deg2pix+cx,(loc2[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		
	
		if c == 0:
			other_loc = [l for l in dot_loc if l not in right_area_loc]
			wrong_loc = random.choice(other_loc)
			real_locs = [wrong_loc,loc2]
			for i in range(0,2):
				responseCanvas.rect((real_locs[i][0]-0.15)*deg2pix+cx,(real_locs[i][1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			var.correct_response_2 = "d"
		
		if c == 2:
			other_loc = [l for l in area[0] if l not in [loc1]]
			wrong_loc = random.choice(other_loc)
			real_locs = [wrong_loc,loc2]
			for i in range(0,2):
				responseCanvas.rect((real_locs[i][0]-0.15)*deg2pix+cx,(real_locs[i][1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			var.correct_response_2 = "d"
		
		if c == 1:
			var.correct_response_2 = "s"
			responseCanvas.rect((loc1[0]-0.15)*deg2pix+cx,(loc1[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			responseCanvas.rect((loc2[0]-0.15)*deg2pix+cx,(loc2[1]+0.15)*deg2pix+cy,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
			
			
			
	######################################################################################################
			
		
			
	
	
	
	setsize = 8
	
	#draw cross
	
	myCanvas.copy(fixCanvas)
	#########################################
	#calculate 6 positions
	
	#halfwidth =  22*2.54*cos(atan(5/8))/2
	
	
	Decc = 4.5 # the radius of the invisible circle
	anglesegment=2*pi/setsize
	circlepositions = []
	for i in range(0,setsize):    
		current_x= Decc*deg2pix * cos(i*anglesegment)+ cx      
		current_y= Decc*deg2pix * sin(i*anglesegment)+ cy      
		circlepositions.append((current_x,current_y))
	
	
	dis_color = ""
	if tar_color == "red":
		dis_color = (0,180,0)
		tar_color = (220,0,0)
	elif tar_color =="green":
		tar_color = (0,180,0)
		dis_color = (220,0,0)
	if detection == "vertical":
		var.correct_response_1 = u"down"
	elif detection == "horizontal":
		var.correct_response_1 = u"left"
	
	if tar_shape == "circle":
			
			if b == "":#no distractor
				#draw target
				myCanvas.circle(x = circlepositions[a][0],y = circlepositions[a][1],r = deg2pix,fill=False,color =tar_color)
				#draw line in target
				if detection == "vertical":
					myCanvas.line(circlepositions[a][0],circlepositions[a][1]-30,circlepositions[a][0],circlepositions[a][1]+30,color="gray")
				elif detection == "horizontal":
					myCanvas.line(circlepositions[a][0]+30,circlepositions[a][1],circlepositions[a][0]-30,circlepositions[a][1],color="gray")
					
				#draw distractors
				other_positions2 = [l for l in circlepositions if l not in [circlepositions[a]]]
				for (x,y) in other_positions2:
					myCanvas.polygon(((x,y-deg2pix*1.1),(x-deg2pix*1.1,y),(x,y+deg2pix*1.1),(x+deg2pix*1.1,y)),color = tar_color,penwidth = 8)
				#draw lines in distractors
				random.shuffle(other_positions2)	
				for i in range(7):
					if detection == "vertical":
						if i<4:
							myCanvas.line(other_positions2[i][0]+30,other_positions2[i][1],other_positions2[i][0]-30,other_positions2[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions2[i][0],other_positions2[i][1]-30,other_positions2[i][0],other_positions2[i][1]+30,color="gray")#vertical
					elif detection == "horizontal":
						if i<3:
							myCanvas.line(other_positions2[i][0]+30,other_positions2[i][1],other_positions2[i][0]-30,other_positions2[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions2[i][0],other_positions2[i][1]-30,other_positions2[i][0],other_positions2[i][1]+30,color="gray")#vertical
					
			else:#with pop-out distractor
				
				#draw target
				myCanvas.circle(x = circlepositions[a][0],y = circlepositions[a][1],r = deg2pix,fill=False,color = tar_color)
				#draw line
				if detection == "vertical":
					myCanvas.line(circlepositions[a][0],circlepositions[a][1]-30,circlepositions[a][0],circlepositions[a][1]+30,color="gray")
					if td_dif == "same":
						myCanvas.line(circlepositions[b][0],circlepositions[b][1]-30,circlepositions[b][0],circlepositions[b][1]+30,color="gray")
					elif td_dif == "dif":
						myCanvas.line(circlepositions[b][0]+30,circlepositions[b][1],circlepositions[b][0]-30,circlepositions[b][1],color="gray")
					
				
				elif detection == "horizontal":
					myCanvas.line(circlepositions[a][0]+30,circlepositions[a][1],circlepositions[a][0]-30,circlepositions[a][1],color="gray")
					if td_dif == "dif":
						myCanvas.line(circlepositions[b][0],circlepositions[b][1]-30,circlepositions[b][0],circlepositions[b][1]+30,color="gray")
					elif td_dif == "same":
						myCanvas.line(circlepositions[b][0]+30,circlepositions[b][1],circlepositions[b][0]-30,circlepositions[b][1],color="gray")
					
				#draw distractor	
				myCanvas.polygon(((circlepositions[b][0], circlepositions[b][1]-deg2pix*1.1),(circlepositions[b][0]-deg2pix*1.1, circlepositions[b][1]),(circlepositions[b][0], circlepositions[b][1]+deg2pix*1.1),(circlepositions[b][0]+deg2pix*1.1, circlepositions[b][1])),color = dis_color,penwidth = 8)
				other_positions1 = [l for l in circlepositions if l not in [circlepositions[a],circlepositions[b]]]
				for (x,y) in other_positions1:
					myCanvas.polygon(((x,y-deg2pix*1.1),(x-deg2pix*1.1,y),(x,y+deg2pix*1.1),(x+deg2pix*1.1,y)),color = tar_color,penwidth = 8)
				
				random.shuffle(other_positions1)
				if td_dif == "dif":
					for i in range(6):
						if i<3:
							myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
				
				elif td_dif == "same":
					for i in range(6):	
						if detection == "vertical":
							if i<4:
								myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
							else:
								myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
						elif detection == "horizontal":
							if i<2:
								myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
							else:
								myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
		
	elif tar_shape == "diamond":
			
			if b == "":#no distractor
				#draw target
				myCanvas.polygon(((circlepositions[a][0], circlepositions[a][1]-deg2pix*1.1),(circlepositions[a][0]-deg2pix*1.1, circlepositions[a][1]),(circlepositions[a][0], circlepositions[a][1]+deg2pix*1.1),(circlepositions[a][0]+deg2pix*1.1, circlepositions[a][1])),color = tar_color,penwidth = 8)
				#draw line in target
				if detection == "vertical":
					myCanvas.line(circlepositions[a][0],circlepositions[a][1]-30,circlepositions[a][0],circlepositions[a][1]+30,color="gray")
					
				elif detection == "horizontal":
					myCanvas.line(circlepositions[a][0]+30,circlepositions[a][1],circlepositions[a][0]-30,circlepositions[a][1],color="gray")
					
				#draw distractors
				other_positions2 = [l for l in circlepositions if l not in [circlepositions[a]]]
				for (x,y) in (other_positions2):
					myCanvas.circle(x,y,r = deg2pix, fill= False,color = tar_color)
				#draw lines in distractors
				random.shuffle(other_positions2)	
				for i in range(7):
					if detection == "vertical":
						if i<4:
							myCanvas.line(other_positions2[i][0]+30,other_positions2[i][1],other_positions2[i][0]-30,other_positions2[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions2[i][0],other_positions2[i][1]-30,other_positions2[i][0],other_positions2[i][1]+30,color="gray")#vertical
					elif detection == "horizontal":
						if i<3:
							myCanvas.line(other_positions2[i][0]+30,other_positions2[i][1],other_positions2[i][0]-30,other_positions2[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions2[i][0],other_positions2[i][1]-30,other_positions2[i][0],other_positions2[i][1]+30,color="gray")#vertical
				
			else:#with pop-out distractor
				
				#draw target
				myCanvas.polygon(((circlepositions[a][0], circlepositions[a][1]-deg2pix*1.1),(circlepositions[a][0]-deg2pix*1.1, circlepositions[a][1]),(circlepositions[a][0], circlepositions[a][1]+deg2pix*1.1),(circlepositions[a][0]+deg2pix*1.1, circlepositions[a][1])),color = tar_color,penwidth = 8)
				#draw line
				if detection == "vertical":
					myCanvas.line(circlepositions[a][0],circlepositions[a][1]-30,circlepositions[a][0],circlepositions[a][1]+30,color="gray")
					if td_dif == "same":
						myCanvas.line(circlepositions[b][0],circlepositions[b][1]-30,circlepositions[b][0],circlepositions[b][1]+30,color="gray")
					elif td_dif == "dif":
						myCanvas.line(circlepositions[b][0]+30,circlepositions[b][1],circlepositions[b][0]-30,circlepositions[b][1],color="gray")
					
				
				elif detection == "horizontal":
					myCanvas.line(circlepositions[a][0]+30,circlepositions[a][1],circlepositions[a][0]-30,circlepositions[a][1],color="gray")
					if td_dif == "dif":
						myCanvas.line(circlepositions[b][0],circlepositions[b][1]-30,circlepositions[b][0],circlepositions[b][1]+30,color="gray")
					elif td_dif == "same":
						myCanvas.line(circlepositions[b][0]+30,circlepositions[b][1],circlepositions[b][0]-30,circlepositions[b][1],color="gray")
					
				#draw distractor
				myCanvas.circle(x = circlepositions[b][0],y = circlepositions[b][1],r = deg2pix,fill=False,color = dis_color)
				
				other_positions1 = [l for l in circlepositions if l not in [circlepositions[a],circlepositions[b]]]
				for (x,y) in other_positions1:
					myCanvas.circle(x,y,r = deg2pix, fill= False,color = tar_color)
					
				random.shuffle(other_positions1)
				for i in range(6):
					if td_dif == "dif":
						if i<3:
							myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
						else:
							myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
					elif td_dif == "same":
						if detection == "vertical":
							if i<4:
								myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
							else:
								myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
						elif detection == "horizontal":
							if i<2:
								myCanvas.line(other_positions1[i][0]+30,other_positions1[i][1],other_positions1[i][0]-30,other_positions1[i][1],color="gray")#horizontal
							else:
								myCanvas.line(other_positions1[i][0],other_positions1[i][1]-30,other_positions1[i][0],other_positions1[i][1]+30,color="gray")#vertical
	__end__

define loop experimental_loop
	set source table
	set skip 0
	set repeat 4
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 regularity condition
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set allowed_responses space
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />The fisrt task accuracy was [acc_1]%<br /><br />The second task accuracy was [acc_2]%<br /><br />Press space to continue" x=0 y=80 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[acc_1]<90" text="Please focus on the searching task !" x=0 y=-60 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[acc_2]<80" text="Please focus on the memory task !" x=0 y=-100 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[avg_rt]>1350" text="Please response as SOON as possible !" x=0 y=-140 z_index=0

define inline_script information
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_parity == "even":
		var.condition = "low_load"
		
	elif var.subject_parity == "odd":
		var.condition = "high_load"
	
	exp._log.close()
	path = 'part2_%s-%d.csv' % (var.condition,self.get('subject_nr'))
	exp.logfile = path
	# Reopen the logfile
	exp._log = None
	exp.init_log()
	
	
	
	
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.age != u'' and var.hand != u'no'
	
	
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in ['0','1','2','3','4','5','6','7','8','9','backspace']
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_gender= Label(u'Your gender')
	checkbox_male = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	label_hand = Label(u'Handedness')
	checkbox_left = Checkbox(text=u'Left-handed', group=u'hand', var=u'hand')
	checkbox_right = Checkbox(text=u'Right-handed', group=u'hand', var=u'hand')
	label_age = Label(u'Your age')
	# Specify a key filter so that only digits are accepted as text input
	input_age = TextInput(stub=u'Age here …', var=u'age', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1], cols=[1,1,1])
	my_form.set_widget(label_gender, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	
	my_form.set_widget(label_hand, (0, 1))
	my_form.set_widget(checkbox_left, (1, 1))
	my_form.set_widget(checkbox_right, (2, 1))
	
	my_form.set_widget(label_age, (0, 2))
	my_form.set_widget(input_age, (1, 2), colspan=2)
	my_form.set_widget(button_ok, (1, 3))
	my_form._exec()
	__end__

define sketchpad instruction_high
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="high load.tif" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad instruction_low
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="low load.tif" scale=0.8 show_if=always x=0 y=0 z_index=0

define keyboard_response keyboard_response_1
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;down"

define keyboard_response keyboard_response_2
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "s;d;SPACE"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log condition
	log avg_rt
	log correct_1
	log correct_2
	log response_time_keyboard_response_1
	log response_time_keyboard_response_2
	log subject_nr
	log count_block_loop
	log practice
	log dis_position
	log tar_position
	log hand
	log gender
	log age
	log distance_dis
	log distance_tar
	log response_keyboard_response_1
	log response_keyboard_response_2
	log acc_1
	log acc_2
	log tar_color
	log tar_shape

define inline_script low_list
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	### get subject number
	Subj_num = self.get("subject_nr")
	
	### Define the fixed distractor location and other locations.
	Fixed_num = Subj_num%8-4
	
	l = range(0,8) 
	l_f = l[Fixed_num]
	low_disloc = [i for i in l if i not in [l_f]]
	
	
	low_list = []
	#distarctor in low probobility location
	for a in l:
		for b in low_disloc:
			if b == a:
				continue
			low_list.append([a,b])
	low_list = low_list*2
	random.shuffle(low_list)
	print len(low_list)
	__end__

define inline_script memory_response
	set description "Executes Python code"
	___run__
	blank.show()
	var.sleep(500)
	responseCanvas.show()
	__end__
	set _prepare "blank = canvas()"

define feedback new_feedback
	set reset_variables yes
	set duration 30000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="This part is over<br /><br />Please take a break for 30s" x=0 y=40 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 regularity condition
	setcycle 0 practice yes
	run block_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run experiment_inline_script always
	run keyboard_response_1 always
	run correct_1 always
	run error_sound "[correct_1] = 0"
	run memory_response always
	run keyboard_response_2 always
	run correct_2 always
	run error_sound_1 "[correct_2] = 0"
	run logger always
	run blank always

